'CR1000X Series Datalogger
'The datalogger type listed on line 1 determines the default instruction set,
'compiler, and help files used for a program that uses the .DLD or .CRB program
'extension. These options can also be set using the Set Datalogger Type dialog box
'(CRBasic Editor|Tools|Set Datalogger Type).

'For programming tips, copy this address to your browser
'search window:https://www.campbellsci.com/videos/datalogger-programming

'To create a different opening program template, type in new
'instructions and select Template | Save as Default Template

'Date:
'Program author:

'Declare Constants
'Example:
'CONST PI = 3.141592654

'Declare Public Variables
'Example:
Public PTemp, Batt_volt
Public i
Public LC_mVV(3)
Public LC_lbs(3)
Public LoadCell_FullScaleLoad(3) = {10,10,50}
Public LoadCell_mVV(3) = {3.195,3.303,2.9990}


'Declare Private Variables
'Example:
'Dim Counter

'Define Data Tables
DataTable (Test,1,-1) 'Set table size to # of records, or -1 to autoallocate.
	DataInterval (0,15,Sec,10)
	Minimum (1,batt_volt,FP2,False,False)
	Sample (1,PTemp,FP2)
EndTable

'Define Subroutines
'Sub
	'EnterSub instructions here
'EndSub

'Main Program
BeginProg
	Scan (500,mSec,0,0)
		PanelTemp (PTemp,15000)
		Battery (Batt_volt)
		

    BrFull(LC_mVV(),3,mV200,1,Vx1,2,4000,False,False,0,_60Hz,1,0)
    

    For i =1 To 3
      LC_lbs(i) = LC_mVV(i)*LoadCell_FullScaleLoad(i)/LoadCell_mVV(i)
    Next i
    

		'Enter other measurement instructions
		'Call Output Tables
		'Example:
		CallTable Test
	NextScan
EndProg

